PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(-1.0000, -1.0000, -1.0000)
  expName = LetterChangeTask6
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    TextComponent fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent mem1
      letterHeight = 0.05
      pos = (-0.18,0.32)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $d1
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    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.5
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    TextComponent probe1
      letterHeight = 0.05
      pos = (-0.18, 0.31)
      startVal [time (s)] = 3.5
      text [set every repeat] = $p1
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    KeyboardComponent response
      allowedKeys = 's','d'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 3.5
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
    CodeComponent code_2
      Code Type = Auto->JS
    TextComponent mem2
      letterHeight = 0.05
      pos = (0.18,0.31)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every frame] = $d2
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    TextComponent mem3
      letterHeight = 0.05
      pos = (0.36,0.00)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $d3
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    TextComponent mem4
      letterHeight = 0.05
      pos = (0.18,-0.31)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $d4
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    TextComponent mem5
      letterHeight = 0.05
      pos = (-0.18,-0.31)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $d5
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    TextComponent mem6
      letterHeight = 0.05
      pos = (-0.36,0.00)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $d6
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    TextComponent probe2
      letterHeight = 0.05
      pos = (0.18,0.31)
      startVal [time (s)] = 3.5
      text [set every repeat] = $p2
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    TextComponent probe3
      letterHeight = 0.05
      pos = (0.36,0.00)
      startVal [time (s)] = 3.5
      text [set every repeat] = $p3
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    TextComponent probe4
      letterHeight = 0.05
      pos = (0.18,-0.31)
      startVal [time (s)] = 3.5
      text [set every repeat] = $p4
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    TextComponent probe5
      letterHeight = 0.05
      pos = (-0.18,-0.31)
      startVal [time (s)] = 3.5
      text [set every repeat] = $p5
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    TextComponent probe6
      letterHeight = 0.05
      pos = (-0.36,0.00)
      startVal [time (s)] = 3.5
      text [set every repeat] = $p6
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  Routine End
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Press SPACE to exit.
    KeyboardComponent exitKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a set of 6 letters on the screen.

        First, memorize the numbers as quickly and accurately as possible.
        After a short delay, you will see another 6 letter set.

        If the second set is EXACTLY the same as the first, press the S key.

        If ONE digit has changed, press the D key.

        Respond as quickly and accurately as you can.

        Press the SPACEBAR to begin.
    KeyboardComponent instrKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = letter_change_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial', np.int64(1)), ('mem_text', 'KGFLBD'), ('probe_text', 'KGFLBC'), ('d1', 'K'), ('d2', 'G'), ('d3', 'F'), ('d4', 'L'), ('d5', 'B'), ('d6', 'D'), ('p1', 'K'), ('p2', 'G'), ('p3', 'F'), ('p4', 'L'), ('p5', 'B'), ('p6', 'C'), ('correct', 'd'), ('change', np.int64(1)), ('pos', np.int64(5))]),
      OrderedDict([('trial', np.int64(2)), ('mem_text', 'BMLFHC'), ('probe_text', 'BMLFKC'), ('d1', 'B'), ('d2', 'M'), ('d3', 'L'), ('d4', 'F'), ('d5', 'H'), ('d6', 'C'), ('p1', 'B'), ('p2', 'M'), ('p3', 'L'), ('p4', 'F'), ('p5', 'K'), ('p6', 'C'), ('correct', 'd'), ('change', np.int64(1)), ('pos', np.int64(4))]),
      OrderedDict([('trial', np.int64(3)), ('mem_text', 'BLFJKH'), ('probe_text', 'BLFDKH'), ('d1', 'B'), ('d2', 'L'), ('d3', 'F'), ('d4', 'J'), ('d5', 'K'), ('d6', 'H'), ('p1', 'B'), ('p2', 'L'), ('p3', 'F'), ('p4', 'D'), ('p5', 'K'), ('p6', 'H'), ('correct', 'd'), ('change', np.int64(1)), ('pos', np.int64(3))]),
      OrderedDict([('trial', np.int64(4)), ('mem_text', 'HFLJKD'), ('probe_text', 'HBLJKD'), ('d1', 'H'), ('d2', 'F'), ('d3', 'L'), ('d4', 'J'), ('d5', 'K'), ('d6', 'D'), ('p1', 'H'), ('p2', 'B'), ('p3', 'L'), ('p4', 'J'), ('p5', 'K'), ('p6', 'D'), ('correct', 'd'), ('change', np.int64(1)), ('pos', np.int64(1))])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
    Routine trial
  LoopTerminator trials
  Routine End
